<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>56</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>0</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>34</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>1</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartCam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>W</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StopCam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartCam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>2</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StopCam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Z</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SingleFrameCam0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>16</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>X</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SingleFrameCam1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>36</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>32</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>32</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU8</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>33</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU8</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>63</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU8</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="15" Label="Source1" />
      <Edge From="1" To="15" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="14" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="14" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="14" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="14" Label="Source4" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="14" Label="Source5" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source6" />
      <Edge From="14" To="15" Label="Source3" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="16" To="21" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>